PsychoPy2experiment version="2021.2.3"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = experiment
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Routines
  Routine trial
    TextComponent text_2
      letterHeight = 0.1
      startVal [time (s)] = 1
      stopVal [duration (s)] = 0.7
      text [set every repeat] = $Word
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 1
      stopVal [duration (s)] = 1.7
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  Routine inst
    TextComponent text_3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 11.0
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      text:
        In this task, you will be presented English words one by one.
        If the word HAS a mistake, press 'SPACE'.
        If the word DOES NOT HAS a mistake, do nothing.

        Respond within 3 seconds.
Flow
  Routine inst
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = short.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'condition': 'short', 'trial': 'go', 'Word': 'accent'},
      {'condition': 'short', 'trial': 'go', 'Word': 'fruit'},
      {'condition': 'short', 'trial': 'go', 'Word': 'memory'},
      {'condition': 'short', 'trial': 'go', 'Word': 'quake'},
      {'condition': 'short', 'trial': 'go', 'Word': 'decay'},
      {'condition': 'short', 'trial': 'go', 'Word': 'drug'},
      {'condition': 'short', 'trial': 'go', 'Word': 'parent'},
      {'condition': 'short', 'trial': 'go', 'Word': 'bottom'},
      {'condition': 'short', 'trial': 'go', 'Word': 'scale'},
      {'condition': 'short', 'trial': 'go', 'Word': 'beach'},
      {'condition': 'short', 'trial': 'go', 'Word': 'sister'},
      {'condition': 'short', 'trial': 'go', 'Word': 'elf'},
      {'condition': 'short', 'trial': 'go', 'Word': 'napkin'},
      {'condition': 'short', 'trial': 'go', 'Word': 'review'},
      {'condition': 'short', 'trial': 'go', 'Word': 'peak'},
      {'condition': 'short', 'trial': 'go', 'Word': 'horror'},
      {'condition': 'short', 'trial': 'go', 'Word': 'dentist'},
      {'condition': 'short', 'trial': 'go', 'Word': 'clinic'},
      {'condition': 'short', 'trial': 'go', 'Word': 'touch'},
      {'condition': 'short', 'trial': 'go', 'Word': 'donkey'},
      {'condition': 'short', 'trial': 'go', 'Word': 'card'},
      {'condition': 'short', 'trial': 'go', 'Word': 'crown'},
      {'condition': 'short', 'trial': 'go', 'Word': 'fight'},
      {'condition': 'short', 'trial': 'go', 'Word': 'land'},
      {'condition': 'short', 'trial': 'go', 'Word': 'pilgrim'},
      {'condition': 'short', 'trial': 'no-go', 'Word': 'affiar'},
      {'condition': 'short', 'trial': 'no-go', 'Word': 'beleif'}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
    Routine trial
  LoopTerminator trials
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = long.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'condition': 'long', 'trial': 'go', 'Word': 'creativity'},
      {'condition': 'long', 'trial': 'go', 'Word': 'scholarship'},
      {'condition': 'long', 'trial': 'go', 'Word': 'accommodation'},
      {'condition': 'long', 'trial': 'go', 'Word': 'hurricane'},
      {'condition': 'long', 'trial': 'go', 'Word': 'background'},
      {'condition': 'long', 'trial': 'go', 'Word': 'stereotype'},
      {'condition': 'long', 'trial': 'go', 'Word': 'structure'},
      {'condition': 'long', 'trial': 'go', 'Word': 'vegetable'},
      {'condition': 'long', 'trial': 'go', 'Word': 'university'},
      {'condition': 'long', 'trial': 'go', 'Word': 'government'},
      {'condition': 'long', 'trial': 'go', 'Word': 'temperature'},
      {'condition': 'long', 'trial': 'go', 'Word': 'president'},
      {'condition': 'long', 'trial': 'go', 'Word': 'narrative'},
      {'condition': 'long', 'trial': 'go', 'Word': 'commentary'},
      {'condition': 'long', 'trial': 'go', 'Word': 'afternoon'},
      {'condition': 'long', 'trial': 'go', 'Word': 'championship'},
      {'condition': 'long', 'trial': 'go', 'Word': 'madication'},
      {'condition': 'long', 'trial': 'go', 'Word': 'experience'},
      {'condition': 'long', 'trial': 'go', 'Word': 'passenger'},
      {'condition': 'long', 'trial': 'go', 'Word': 'addiction'},
      {'condition': 'long', 'trial': 'go', 'Word': 'formation'},
      {'condition': 'long', 'trial': 'go', 'Word': 'professor'},
      {'condition': 'long', 'trial': 'go', 'Word': 'statement'},
      {'condition': 'long', 'trial': 'go', 'Word': 'tournament'},
      {'condition': 'long', 'trial': 'go', 'Word': 'paragraph'}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
    Routine trial
  LoopTerminator trials_2
